var file$;;
file$:="D:\\DCN_Project\\DataSave\\Spike.mat";
ExportChanList(1); 'Initialise the channel list
'ExportChanList(0,maxTime(),1,2,5,6, 7, 31, 32);
ExportChanList(0,maxTime(), 1, 2, 3, 4, 5, 6, 11, 30, 31, 32);
'ExportChanList(0,maxTime(), 8, 31, 32);
FileSaveAs(file$,100,0,"",0,
"UseSName=0|UseCName=1|WaveTimes=1|BinFreq=0|BinTimes=0|WaveData=2|MarkAs=1|TMarkAs=2|RMarkAs=2|RMarkData=2|WaveMarkAs=2|WaveMarkData=2|Compatability=0"); 'Export (string args)
PrintLog("\n");
PrintLog("matlab file exported as: " + file$);
'View(LogHandle()).FileSaveAs("C:\\Helen\\SpikeData\\SpikeExport\\SpikeLog.txt", 1, 1);
View(LogHandle()).FileSaveAs("D:\\DCN_Project\\DataSave\\SpikeLog_QZ.txt", 1, 1);